CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:42
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|\\allen\aics\gene-editing\FISH\2019\chaos\data\cp_testing\testing_pipeline_image_input
    Name of the file:nonstructure_segmented_image_set_list_test_exported.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:No

IdentifyPrimaryObjects:[module_num:2|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notes:['Segment nuclei']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
    Select the input image:nuc
    Name the primary objects to be identified:nuc
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
RescaleIntensity:[module_num:3|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notes:['Rescale intensity of brightfield channel; used only when saving cell outline and object number images']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
    Select the input image:bf
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:4|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notes:['Rescale intensity of nuclear channel; used only when saving cell outlines and object numbers']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
    Select the input image:nuc
    Name the output image:RescaleIntensityNuc
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:5|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notes:['Zeiss rescale of segmented probe channels; zeiss images are uint16; probe seg channels min,max is 0,255 and when using the LoadData module they are getting rescaled internally by cp to 0,0.0039 (255/65532); LoadData rescale intensities is set to No, but rescaling is happening still?? This is breaking IdentifyPrimaryObjects and no probe objects are identified. To fix adding rescale to divide by max of intensity of probe channel, this will convert them to min,max 0,1']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
    Select the input image:seg_488
    Name the output image:rescaled_seg_488
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:6|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notes:['Zeiss rescale of segmented probe channels; zeiss images are uint16; probe seg channels min,max is 0,255 and when using the LoadData module they are getting rescaled internally by cp to 0,0.0039 (255/65532); LoadData rescale intensities is set to No, but rescaling is happening still?? This is breaking IdentifyPrimaryObjects and no probe objects are identified. To fix adding rescale to divide by max of intensity of probe channel, this will convert them to min,max 0,1']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
    Select the input image:seg_561
    Name the output image:rescaled_seg_561
    Rescaling method:Divide by the image's maximum
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
RescaleIntensity:[module_num:7|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notes:['Zeiss rescale of segmented probe channels; zeiss images are uint16; probe seg channels min,max is 0,255 and when using the LoadData module they are getting rescaled internally by cp to 0,0.0039 (255/65532); LoadData rescale intensities is set to No, but rescaling is happening still?? This is breaking IdentifyPrimaryObjects and no probe objects are identified. To fix adding rescale to divide by max of intensity of probe channel, this will convert them to min,max 0,1']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
    Select the input image:seg_638
    Name the output image:rescaled_seg_638
    Rescaling method:Divide by the image's maximum
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measure size of nuclei; use in next step to filter nuclei by area']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
    Select objects to measure:nuc
    Calculate the Zernike features?:No

FilterObjects:[module_num:9|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notes:['Create new nuclei objects that pass minimim area threshold (min area = 2500); this threshold is based on looking at the distribution of all nuclei areas']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
    Select the objects to filter:nuc
    Name the output objects:FilterNuc
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:10|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notes:['Create new object for just nuclei objects that fall below the minimum nucleus area; these objects are potential debris']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
    Select the objects to filter:nuc
    Name the output objects:NucBubble
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:500

FilterObjects:[module_num:11|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notes:["Create new nuclei objects that don't touch the border of the cell"]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
    Select the objects to filter:FilterNuc
    Name the output objects:FilterNucBorder
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityNuc
    Name the output image:cell_filter_nuc_boundaries
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:FilterNuc
    Select outline color:Yellow
    Select objects to display:napari_cell

DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:FilterNuc
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:cell_filter_nuc_boundaries
    Text color:#008000
    Name the output image that has the measurements displayed:save1
    Font size (points):14
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Segment probe channel 561']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
    Select the input image:rescaled_seg_488
    Name the primary objects to be identified:seg_probe_488
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.95
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:rescaled_seg_561
    Name the primary objects to be identified:seg_probe_561
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.95
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
IdentifyPrimaryObjects:[module_num:16|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notes:['Segment probe channel 638']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
    Select the input image:rescaled_seg_638
    Name the primary objects to be identified:seg_probe_638
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.95
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
ShrinkToObjectCenters:[module_num:17|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notes:['Get nuclei centroids']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
    Select the input object:FilterNuc
    Name the output object:NucCentroid

DilateObjects:[module_num:18|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notes:['For display purposes only; dilate centroids so that they are visible on image']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
    Select the input object:NucCentroid
    Name the output object:DilateCentroid
    Structuring element:disk,10

RelateObjects:[module_num:19|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notes:['Assign each nucleus centroid to a cell (centroid is single pixel)']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
    Parent objects:napari_cell
    Child objects:NucCentroid
    Name the output object:RelateNapariNucCentroid
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
SplitOrMergeObjects:[module_num:20|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notes:['Merge centroids by parent napari cell']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
    Select the input objects:NucCentroid
    Name the new objects:MergedNucCentroidByCell
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:napari_cell
    Output object type:Disconnected

RelateObjects:[module_num:21|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notes:['Relate size filtered nuclei objects to new object composed of all nuclei centroids that are in one cell; each parent merged centroid object can have multiple FilterNuc children']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
    Parent objects:MergedNucCentroidByCell
    Child objects:FilterNuc
    Name the output object:NucToNucCentroid
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
SplitOrMergeObjects:[module_num:22|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notes:['Get final merged nuclei object (actual nuclei that will be used for calculating features, not just centroids) by merging FilterNuc objects by parent merged centroid object => FilterNuc with centroids in a cell will have same mergednuccentroidbycell parent']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
    Select the input objects:FilterNuc
    Name the new objects:FinalNuc
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:MergedNucCentroidByCell
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:23|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
    Select objects to measure:FilterNuc
    Select objects to measure:seg_probe_488
    Select objects to measure:seg_probe_561
    Select objects to measure:seg_probe_638
    Select objects to measure:napari_cell
    Select objects to measure:FinalNuc
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:24|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notes:['Measure textures for cell and nuclei objects from the brightfield, and nuclear channels at 3 different scales']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
    Hidden:2
    Hidden:2
    Hidden:3
    Select an image to measure:bf
    Select an image to measure:nuc
    Select objects to measure:napari_cell
    Select objects to measure:FinalNuc
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Measure images or objects?:Objects

FilterObjects:[module_num:25|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
    Select the objects to filter:FinalNuc
    Name the output objects:FinalNucBorder
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
FilterObjects:[module_num:26|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
    Select the objects to filter:napari_cell
    Name the output objects:napari_cell_Border
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensityNuc
    Name the output image:cell_filter_nuc_centroid_boundaries
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:FinalNuc
    Select outline color:yellow
    Select objects to display:napari_cell
    Select outline color:red
    Select objects to display:DilateCentroid

DisplayDataOnImage:[module_num:28|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
    Display object or image measurements?:Object
    Select the input objects:FinalNuc
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:cell_filter_nuc_centroid_boundaries
    Text color:#008000
    Name the output image that has the measurements displayed:save2
    Font size (points):14
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:cell_number_filter_nuc_centroid_boundaries
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:FinalNuc
    Select outline color:yellow
    Select objects to display:napari_cell
    Select outline color:red
    Select objects to display:DilateCentroid

DisplayDataOnImage:[module_num:30|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
    Display object or image measurements?:Object
    Select the input objects:napari_cell
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:cell_number_filter_nuc_centroid_boundaries
    Text color:yellow
    Name the output image that has the measurements displayed:saver3
    Font size (points):14
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
RelateObjects:[module_num:31|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notes:['Assign probe objects to napari cells']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
    Parent objects:napari_cell
    Child objects:seg_probe_488
    Name the output object:probe488RelateNapari
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:32|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
    Parent objects:napari_cell
    Child objects:seg_probe_561
    Name the output object:probe561RelateNapari
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:33|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notes:['Assign probe objects to napari cells']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
    Parent objects:napari_cell
    Child objects:seg_probe_638
    Name the output object:probe638RelateNapari
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:34|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notes:['Assign probe objects to nuclei objects']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
    Parent objects:FinalNuc
    Child objects:seg_probe_488
    Name the output object:probe488RelateNuc
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:35|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
    Parent objects:FinalNuc
    Child objects:seg_probe_561
    Name the output object:probe561RelateNuc
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:36|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notes:['Assign probe objects to nuclei objects']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
    Parent objects:FinalNuc
    Child objects:seg_probe_638
    Name the output object:probe638RelateNuc
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ConvertObjectsToImage:[module_num:37|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
    Select the input objects:FilterNuc
    Name the output image:nuc_object_mask
    Select the color format:uint16
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
SaveImages:[module_num:38|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
    Select the type of image to save:Image
    Select the image to save:save1
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cell_filter_nuc_num
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:save2
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cell_filter_nuc_centroid_num
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:saver3
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:filter_nuc_centroid_cell_num
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:nuc_object_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:nuc_final_mask
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:42|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|\\\\\\\\\\\\allen\\\\\\\\aics\\\\\\\\gene-editing\\\\\\\\FISH\\\\\\\\2019\\\\\\\\chaos\\\\\\\\data\\\\\\\\cp_20190827\\\\\\\\napari
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:napari_
    Overwrite existing files without warning?:No
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