CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:45
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|\\allen\aics\gene-editing\FISH\2019\chaos\data\cp_testing\testing_pipeline_image_input
    Name of the file:test.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:No

Threshold:[module_num:2|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
    Select the input image:fore_back
    Name the output image:binary_fore_back
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.5
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:nuc
    Name the primary objects to be identified:nuc
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:35
    Suppress local maxima that are closer than this minimum allowed distance:35
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
RescaleIntensity:[module_num:4|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
    Select the input image:bf
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectSizeShape:[module_num:5|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
    Select objects to measure:nuc
    Calculate the Zernike features?:No

FilterObjects:[module_num:6|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
    Select the objects to filter:nuc
    Name the output objects:FilterNuc
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2500
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:7|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
    Select the objects to filter:nuc
    Name the output objects:NucBubble
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2500

FilterObjects:[module_num:8|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
    Select the objects to filter:FilterNuc
    Name the output objects:FilterNucBorder
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:FilterNucBorder
    Name the objects to be identified:cell_boundary_35
    Select the method to identify the secondary objects:Distance - N
    Select the input image:nuc
    Number of pixels by which to expand the primary objects:78
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:FilterNucBorder
    Name the objects to be identified:cell_boundary_50
    Select the method to identify the secondary objects:Distance - N
    Select the input image:nuc
    Number of pixels by which to expand the primary objects:112
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
FilterObjects:[module_num:11|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
    Select the objects to filter:cell_boundary_35
    Name the output objects:filter_cell_35
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
FilterObjects:[module_num:12|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
    Select the objects to filter:cell_boundary_50
    Name the output objects:filter_cell_50
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
MaskObjects:[module_num:13|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
    Select objects to be masked:cell_boundary_35
    Name the masked objects:cell_35_minus_back
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:binary_fore_back
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:14|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
    Select objects to be masked:cell_boundary_50
    Name the masked objects:cell_50_minus_back
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:binary_fore_back
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:seg_561
    Name the primary objects to be identified:seg_probe_561
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.95
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:seg_638
    Name the primary objects to be identified:seg_probe_638
    Typical diameter of objects, in pixel units (Min,Max):1,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.95
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
RelateObjects:[module_num:17|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
    Parent objects:napari_cell
    Child objects:FilterNucBorder
    Name the output object:RelateNapariFilterNucBorder
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:FilterNucBorder
    Select objects to measure:cell_boundary_35
    Select objects to measure:cell_boundary_50
    Select objects to measure:cell_35_minus_back
    Select objects to measure:cell_50_minus_back
    Select objects to measure:seg_probe_561
    Select objects to measure:seg_probe_638
    Select objects to measure:napari_cell
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:19|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
    Hidden:3
    Hidden:2
    Hidden:3
    Select an image to measure:bf
    Select an image to measure:structure
    Select an image to measure:nuc
    Select objects to measure:napari_cell
    Select objects to measure:FilterNucBorder
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Measure images or objects?:Objects

RelateObjects:[module_num:20|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
    Parent objects:cell_boundary_35
    Child objects:seg_probe_561
    Name the output object:probe561RelateNuclei35
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:21|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
    Parent objects:cell_boundary_35
    Child objects:seg_probe_638
    Name the output object:probe638RelateNuclei35
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:22|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
    Parent objects:cell_boundary_50
    Child objects:seg_probe_561
    Name the output object:probe561RelateNuclei50
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:23|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
    Parent objects:cell_boundary_50
    Child objects:seg_probe_638
    Name the output object:probe638RelateNuclei50
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:24|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
    Parent objects:cell_35_minus_back
    Child objects:seg_probe_561
    Name the output object:probe561RelateNuclei35_back
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:25|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
    Parent objects:cell_35_minus_back
    Child objects:seg_probe_638
    Name the output object:probe638RelateNuclei35_back
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:26|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
    Parent objects:cell_50_minus_back
    Child objects:seg_probe_561
    Name the output object:probe561RelateNuclei50_back
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:27|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
    Parent objects:cell_50_minus_back
    Child objects:seg_probe_638
    Name the output object:probe638RelateNuclei50_back
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:28|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
    Parent objects:napari_cell
    Child objects:seg_probe_561
    Name the output object:probe561RelateNapari
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:29|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
    Parent objects:napari_cell
    Child objects:seg_probe_638
    Name the output object:probe638RelateNapari
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:30|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
    Parent objects:FilterNucBorder
    Child objects:seg_probe_561
    Name the output object:probe561RelateNuc
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
RelateObjects:[module_num:31|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
    Parent objects:FilterNucBorder
    Child objects:seg_probe_638
    Name the output object:probe638RelateNuc
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ConvertObjectsToImage:[module_num:32|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
    Select the input objects:FilterNucBorder
    Name the output image:nuc_object_mask
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:33|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
    Select the input objects:cell_boundary_35
    Name the output image:cell_35_object_mask
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:34|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
    Select the input objects:cell_boundary_50
    Name the output image:cell_50_object_mask
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:35|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
    Select the input objects:cell_35_minus_back
    Name the output image:cell_35_minus_back_object_mask
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:36|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
    Select the input objects:cell_50_minus_back
    Name the output image:cell_50_minus_back_object_mask
    Select the color format:uint16
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
OverlayOutlines:[module_num:37|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity
    Name the output image:nuc_on_cell_boundary
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:cell_boundary_50
    Select outline color:blue
    Select objects to display:FilterNucBorder
    Select outline color:#FF8040
    Select objects to display:cell_boundary_35
    Select outline color:Yellow
    Select objects to display:napari_cell

DisplayDataOnImage:[module_num:38|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
    Display object or image measurements?:Object
    Select the input objects:FilterNucBorder
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:nuc_on_cell_boundary
    Text color:#008040
    Name the output image that has the measurements displayed:nuc_num_on_cell_boundary
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:39|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
    Select the type of image to save:Image
    Select the image to save:nuc_num_on_cell_boundary
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:nuc_num_1
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:nuc_object_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:nuc
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:nuc_mask
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:cell_35_object_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cell_35_mask
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:cell_50_object_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cell_50_mask
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:cell_35_minus_back_object_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cell_35_minus_back_mask
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:cell_50_minus_back_object_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cell_50_minus_back_mask
    Saved file format:tiff
    Output file location:Default Output Folder|\\\\\\\\allen\\\\aics\\\\gene-editing\\\\FISH\\\\2019\\\\chaos\\\\data\\\\cp_20190827\\\\napari
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:45|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|\\\\\\\\\\\\allen\\\\\\\\aics\\\\\\\\gene-editing\\\\\\\\FISH\\\\\\\\2019\\\\\\\\chaos\\\\\\\\data\\\\\\\\cp_20190827\\\\\\\\napari
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:napari_
    Overwrite existing files without warning?:No
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